CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^plate_(?P<Plate>[0-9]{1,2})_(?P<Row>[A-Z])-(?P<Column>[0-9]{1,2})_(?P<Field>[0-9]{1})_(?P<Channel>[A-z]{4,8}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "FITC")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "TexasRed")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:mCherry
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0, 1
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:YFP
    Name the primary objects to be identified:Diffuse
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectIntensity:[module_num:8|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enabled:False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
    Hidden:1
    Select an image to measure:YFP
    Select objects to measure:Diffuse

MeasureTexture:[module_num:9|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:YFP
    Select objects to measure:Diffuse
    Texture scale to measure:3
    Measure images or objects?:Both

FilterObjects:[module_num:10|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
    Select the objects to filter:Diffuse
    Name the output objects:Filtered_Diffuse
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Texture_AngularSecondMoment_YFP_3_00
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:YFP
    Name the primary objects to be identified:Puncta
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:4.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureImageAreaOccupied:[module_num:12|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Puncta
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|Count_Puncta,Image|Count_Filtered_Diffuse,Image|AreaOccupied_AreaOccupied_Puncta,Image|Metadata_Plate,Image|Metadata_Column,Image|Metadata_Well,Image|Metadata_Field,Image|Metadata_Row
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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